CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (directory doesnot containregexp "[\\\\\\\\\\\\\\\\/]\\\\\\\\.")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:Ch(?P<Channel>[0-9]*)_(?P<Image>.*).tif
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    Extract metadata from:All images
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    Metadata extraction method:Import from file
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    Regular expression:Ch(?P<Channel>[0-9]*)_(?P<Image>.*).tif
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    Extract metadata from:All images
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    Metadata file location:C:\\\\Users\\\\hokkenha\\\\Desktop\\\\for 4D_output\\\\CellProfiler\\\\Settings.csv
    Match file and image metadata:[{'Image Metadata': u'Channel', 'CSV Metadata': u'Channel'}]
    Use case insensitive matching?:No

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:6
    Single images count:0
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    Select the rule criteria:and (file does contain "Mask")
    Name to assign these images:mask
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does containregexp "Lines")
    Name to assign these images:label
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Original")
    Name to assign these images:original
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    Select the image type:Binary mask
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    Select the rule criteria:or (file does contain "Ch1")
    Name to assign these images:green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does containregexp "Ch2")
    Name to assign these images:red
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does containregexp "Ch3")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Morph:[module_num:5|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
    Select the input image:mask
    Name the output image:ForBackground
    Select the operation to perform:invert
    Number of times to repeat operation:Once
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    Diameter:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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    Select the operation to perform:open
    Number of times to repeat operation:Once
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    Diameter:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:ForBackground
    Name the primary objects to be identified:Background
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Binary image
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    Select binary image:ForBackground
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
MeasureImageIntensity:[module_num:7|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
    Select the image to measure:green
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:Background

ApplyThreshold:[module_num:8|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
    Select the input image:green
    Name the output image:green_threshold
    Select the output image type:Grayscale
    Set pixels below or above the threshold to zero?:Below threshold
    Subtract the threshold value from the remaining pixel intensities?:Yes
    Number of pixels by which to expand the thresholding around those excluded bright pixels:0.0
    Threshold setting version:2
    Threshold strategy:Measurement
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    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Intensity_MedianIntensity_green_Background
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:label
    Name the primary objects to be identified:Lines
    Typical diameter of objects, in pixel units (Min,Max):3,30
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.001
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
Morph:[module_num:10|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
    Select the input image:label
    Name the output image:dil_label
    Select the operation to perform:dilate
    Number of times to repeat operation:Once
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    Diameter:8
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
ExpandOrShrinkObjects:[module_num:11|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
    Select the input objects:Lines
    Name the output objects:ExpandedLines
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:12
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    Retain the outlines of the identified objects?:No
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:mask
    Name the primary objects to be identified:worms1
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Binary image
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    Select binary image:mask
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
MaskObjects:[module_num:13|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
    Select objects to be masked:ExpandedLines
    Name the masked objects:worms2
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:worms1
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

ExpandOrShrinkObjects:[module_num:14|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
    Select the input objects:worms2
    Name the output objects:worms
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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    Retain the outlines of the identified objects?:No
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
MeasureObjectIntensity:[module_num:15|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
    Hidden:5
    Select an image to measure:green
    Select an image to measure:green_threshold
    Select an image to measure:red
    Select an image to measure:label
    Select an image to measure:dil_label
    Select objects to measure:worms
    Select objects to measure:Lines

MeasureObjectSizeShape:[module_num:16|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
    Select objects to measure:worms
    Select objects to measure:Lines
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|CellProfiler_output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:worms
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Lines
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
